PsychoPy2experiment version="2022.2.5"
Settings
  Data file delimiter = semicolon
  Experiment info = {'participant': '', 'płeć': "['kobieta', 'mężczyzna']", 'wiek': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 0.0000, 0.0000, 0.0000
  expName = eyetracker
  eyetracker = Pupil Labs
  keyboardBackend = ioHub
  logging level = data
  plConfidenceThreshold = 0.6
  plPupilCaptureRecordingEnabled = True
  plPupilRemoteAddress = 127.0.0.1
  plPupilRemotePort = 50020
  plPupilRemoteTimeoutMs = 1000
  plPupillometryOnly = False
  plSurfaceName = dell
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Routines
  Routine end
    TextComponent text_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Dziękujemy za udział w badaniu!
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    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
    TextComponent space
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = Naciśnij spację, żeby przejść dalej
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    KeyboardComponent space_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent welcome_message
      alignment = top-left
      anchor = top-left
      bold = False
      editable = False
      letterHeight = 0.04
      pos = (-.8, .4)
      size = (1.6, .5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $inst_text
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        ## Depending on the sex of the participant it
        ## either loads the instruction for females or
        ## males.
        with open('materials/instruction.txt', encoding="utf-8") as file:
            instruction_list = file.readlines()
        if expInfo['płeć'] == 'kobieta':
            inst_text = instruction_list[0].replace(';','\n\n')
        else:
            inst_text = instruction_list[1].replace(';','\n\n')
      Begin Routine:
        ## Makes the cursor of the mause invisible.
        win.mouseVisible = False
  Routine ratings
    TextboxComponent textbox
      alignment = center-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, .4)
      size = (1.5, .2)
      startVal [time (s)] = 0.0
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      text:
        Na ile gwiazdek w skali od 1 do 5 oceniłabyś/oceniłbyś prezentowany przed chwilą produkt? Najedź kursorem na rząd z wybraną liczbą gwiazdek i naciśnij lewy klawisz myszy.
    ImageComponent stars
      image = png/stars.png
      pos = (-.5, 0.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_2_1
      image = png/stars.png
      pos = (-.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_2_2
      image = png/stars.png
      pos = (-.4, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_3_1
      image = png/stars.png
      pos = (-.5, -.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_3_2
      image = png/stars.png
      pos = (-.4, -.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_3_3
      image = png/stars.png
      pos = (-.3, -.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_4_1
      image = png/stars.png
      pos = (-.5, -.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_4_2
      image = png/stars.png
      pos = (-.4, -.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_4_3
      image = png/stars.png
      pos = (-.3, -.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_4_4
      image = png/stars.png
      pos = (-.2, -.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_5_1
      image = png/stars.png
      pos = (-.5, -.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_5_2
      image = png/stars.png
      pos = (-.4, -.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_5_3
      image = png/stars.png
      pos = (-.3, -.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_5_4
      image = png/stars.png
      pos = (-.2, -.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_5_5
      image = png/stars.png
      pos = (-.1, -.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent star_1
      bold = True
      color = None
      fillColor = None
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.5, .1)
      size = (.1,.1)
      startVal [time (s)] = 0
      timeRelativeTo = routine
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    ButtonComponent star_2
      bold = True
      color = None
      fillColor = None
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.45, 0)
      size = (.2,.1)
      startVal [time (s)] = 0
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    ButtonComponent star_3
      bold = True
      color = None
      fillColor = None
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.4, -.1)
      size = (.3,.1)
      startVal [time (s)] = 0
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    ButtonComponent star_4
      bold = True
      color = None
      fillColor = None
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.35, -.2)
      size = (.4,.1)
      startVal [time (s)] = 0
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    ButtonComponent star_5
      bold = True
      color = None
      fillColor = None
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.3, -.3)
      size = (.5,.1)
      startVal [time (s)] = 0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        ## Initilize number of clicks to 0
        star_1_num_clicks = star_2_num_clicks = star_3_num_clicks = star_4_num_clicks = star_5_num_clicks = 0

        ## Initilize the order of condition variable
        condition_order = 1
      Begin Routine:
        ## Make the mouse cursor visible
        win.mouseVisible = True

        ## Timestamp of when the star appeared
        stars_appeared = local_clock()
      End Routine:
        ## Make the mouse coursor invisible
        win.mouseVisible = False

        ## Reaction time to a star
        stars_time = local_clock() - stars_appeared

        ## Assign the reaction time to a star
        ## to the relevant star
        if star_1.numClicks and star_1.numClicks > star_1_num_clicks:
            star_1_rt = stars_time
            star_1_num_clicks = star_1.numClicks
        else:
            star_1_rt = 0

        if star_2.numClicks and star_2.numClicks > star_2_num_clicks:
            star_2_rt = stars_time
            star_2_num_clicks = star_2.numClicks
        else:
            star_2_rt = 0

        if star_3.numClicks and star_3.numClicks > star_3_num_clicks:
            star_3_rt = stars_time
            star_3_num_clicks = star_3.numClicks
        else:
            star_3_rt = 0

        if star_4.numClicks and star_4.numClicks > star_4_num_clicks:
            star_4_rt = stars_time
            star_4_num_clicks = star_4.numClicks
        else:
            star_4_rt = 0

        if star_5.numClicks and star_5.numClicks > star_5_num_clicks:
            star_5_rt = stars_time
            star_5_num_clicks = star_5.numClicks
        else:
            star_5_rt = 0

        ## Write out the reactions times to XLSX file
        trials.addData('star1', star_1_rt)
        trials.addData('star2', star_2_rt)
        trials.addData('star3', star_3_rt)
        trials.addData('star4', star_4_rt)
        trials.addData('star5', star_5_rt)

        ## Write out condition order the automatic
        ## variable does not work properly because
        ## of the times of Buttons being weird
        trials.addData('condition_order', condition_order)

        ## Increament condition order
        condition_order += 1
  Routine trust_manipulation
    TextComponent space2
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = Naciśnij spację, żeby przejść dalej
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    TextboxComponent trust_instruction
      alignment = top-left
      anchor = top-left
      bold = False
      editable = False
      letterHeight = 0.04
      pos = (-.8, .4)
      size = (1.6, .5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $trust
    KeyboardComponent space2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent trust
      Code Type = Auto->JS
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      Begin Experiment:
        ## Assigns the participant to the trust condition.
        ## If the id is even the participant is assigned
        ## to the trust condition. Oterwise to untrustworthy.
        ## Additionally, it reads relevant instruction
        ## either for females or males.
        if int(expInfo['participant']) % 2 == 0:
            with open('materials/trust.txt', encoding="utf-8") as file:
                trust_list = file.readlines()
            if expInfo['płeć'] == 'kobieta':
                trust = trust_list[0]
            else:
                trust = trust_list[1]
        else:
            with open('materials/untrust.txt', encoding="utf-8") as file:
                trust_list = file.readlines()
            if expInfo['płeć'] == 'kobieta':
                trust = trust_list[0]
            else:
                trust = trust_list[1]
  Routine products_display
    ImageComponent stimulus
      anchor = top-center
      image [set every repeat] = $image
      pos = (0, 0.9)
      size = (.53,.7)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      units = norm
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $price
      units = norm
      wrapWidth = 50
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    TextboxComponent left_text
      alignment = top-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.04
      lineSpacing = 0.8
      pos = (-.5, -0.15)
      size = (.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $facts
      units = norm
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    TextboxComponent right_text
      alignment = top-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.04
      lineSpacing = 0.8
      pos = (.5, -0.15)
      size = (.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $opinions
      units = norm
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    TextComponent left_title
      letterHeight = 0.05
      pos = (-.5, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $left
      units = norm
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    TextComponent right_title
      letterHeight = 0.05
      pos = (.5, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $right
      units = norm
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from utils import remote_annotations as ra
        import time

        ## Default values
        ip_address = '127.0.0.1'
        port = 50020
        # 1. Setup network connection
        capture_exists = ra.check_capture_exists(ip_address, port)
        local_clock = time.perf_counter

        ## Check whether Pupil Core is connected.
        if capture_exists:
            pupil_remote, pub_socket = ra.setup_pupil_remote_connection(ip_address, port)

            ## 2. Setup local clock function
            local_clock = time.perf_counter

            ## 3. Measure clock offset accounting for network latency
            stable_offset_mean = ra.measure_clock_offset_stable(
                pupil_remote, clock_function=local_clock, n_samples=10
            )
            pupil_time_actual = ra.request_pupil_time(pupil_remote)
            local_time_actual = local_clock()
            pupil_time_calculated_locally = local_time_actual + stable_offset_mean

            ## 4. Start the annotation plugin
            ra.notify(pupil_remote,{"subject": "start_plugin", "name": "Annotation_Capture", "args": {}},)
      Begin Experiment:
        ## Check whether Puil Core is connected
        if capture_exists:
            ## start a recording (necessary for this example script)
            pupil_remote.send_string("R")
            pupil_remote.recv_string()
      Begin Routine:
        left = 'FAKTY'
        right = 'OPINIE'
        ## Randomize whether facts will be displayed on the
        ## left or right side of the screen.
        if randint(0,2):
            opinions, facts = facts, opinions
            left, right = right, left

        ## Check whether Pupil Core is connected
        if capture_exists:
            ## Measure local time
            local_time = local_clock()
            ## Create label
            label = product + '_' + left + '_start'
            ## Crealte an annotation
            minimal_trigger = ra.new_trigger(label, local_time + stable_offset_mean)
            ## Send the annotation to Pupil Core with the
            ## start trigger
            ra.send_trigger(pub_socket, minimal_trigger)

        ## Write out what was displayed on the left side
        trials.addData('left', left)
      End Experiment:
        ## Check whether Pupil Capture is connected
        if capture_exists:
            ## stop recording
            pupil_remote.send_string("r")
            pupil_remote.recv_string()
      End Routine:
        ## Check whether Pupil Core is connected
        ## And send the annotation with the stop trigger.
        if capture_exists:
            local_time = local_clock()
            label = product + '_' + left + '_end'
            minimal_trigger = ra.new_trigger(label, local_time + stable_offset_mean)
            ra.send_trigger(pub_socket, minimal_trigger)
  Routine environmentalism_check
    TextComponent environmentalism
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Jak dużą wagę przywiązujesz do kwestii środowiskowych robiąc zakupy?
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    SliderComponent slider_env
      fillColor = Black
      forceEndRoutine = True
      granularity = 1
      labels = "Bardzo małą", "Bardzo dużą"
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6 ,7)
      units = norm
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  Routine carbon_footprint
    TextComponent carbon_foot
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Czym jest 'ślad węglowy'?
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    SliderComponent carbon_footprint_scale
      fillColor = Black
      flip = True
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.03
      ori = -1
      pos = (-.6, 0)
      size = (.025, .8)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4)
      units = norm
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    TextboxComponent a
      alignment = top-left
      anchor = top-left
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-.5, .44)
      size = (1, .25)
      startVal [time (s)] = 0.0
      text = Jest to ekwiwalent ilości węgla zużytej do wyprodukowania danej rzeczy.
      units = norm
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    TextboxComponent b
      alignment = top-left
      anchor = top-left
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-.5, .2)
      size = (1, .5)
      startVal [time (s)] = 0.0
      text = Jest to ekwiwalent ilości gazów cieplarnianych, jaka zostałaby wyemitowana do atmosfery przy degradacji produktu.
      units = norm
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    TextboxComponent c
      alignment = top-left
      anchor = top-left
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-.5, -.06)
      size = (1, .5)
      startVal [time (s)] = 0.0
      text = Jest to całkowita suma emisji gazów cieplarnianych wywołanych bezpośrednio lub pośrednio przez dany produkt.
      units = norm
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    TextboxComponent d
      alignment = top-left
      anchor = top-left
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-.5, -.32)
      size = (1, .5)
      startVal [time (s)] = 0.0
      text = Jest to suma emisji dwutlenku węgla, jaka trafia do atmosfery w związku z użytkowaniem produktu.
      units = norm
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  Routine awareness_opinions_check
    TextboxComponent awareness_opinions
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, .4)
      size = (1.5, .2)
      startVal [time (s)] = 0.0
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      text:
        W przypadku swojej oceny każdego produktu wskaż, na ile istotne były dla Ciebie opinie na temat danego produktu?
    SliderComponent laptop_opinions
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = "Bardzo mało istotne", "Bardzo istotne"
      letterHeight = 0.04
      pos = (-0.4, 0.5)
      size = (.7, .05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = norm
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    SliderComponent smartwatch_opinions
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = "Bardzo mało istotne", "Bardzo istotne"
      letterHeight = 0.04
      pos = (-0.4, 0.1)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = norm
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    SliderComponent smartband_opinions
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = "Bardzo mało istotne", "Bardzo istotne"
      letterHeight = 0.04
      pos = (-0.4, -0.3)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = norm
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    SliderComponent tablet_opinions
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = "Bardzo mało istotne", "Bardzo istotne"
      letterHeight = 0.04
      pos = (-0.4, -0.7)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = norm
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    ImageComponent laptop
      image = png/laptop_m.png
      pos = (0.4, 0.5)
      size = (0.225, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent smartwatch
      image = png/smartwatch_m.png
      pos = (0.4, 0.1)
      size = (0.225, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent smartband
      image = png/smartband_m.png
      pos = (0.4, - 0.3)
      size = (0.225, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent tablet
      image = png/tablet_m.png
      pos = (0.4, -0.7)
      size = (0.225, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        ## Make the mouse cursor visible
        win.mouseVisible = True
      Each Frame:
        if laptop_opinions.rating and smartwatch_opinions.rating and smartband_opinions.rating and tablet_opinions.rating:
            continueRoutine=False
  Routine awareness_price_check
    TextboxComponent awareness_price
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, .4)
      size = (1.5, .2)
      startVal [time (s)] = 0.0
      text = W przypadku swojej oceny każdego produktu wskaż, jak bardzo istotna była dla Ciebie jego cena?
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    SliderComponent laptop_price
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = "Bardzo mało istotne", "Bardzo istotne"
      letterHeight = 0.04
      pos = (-0.4, 0.5)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = norm
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    SliderComponent smartwatch_price
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = "Bardzo mało istotne", "Bardzo"
      letterHeight = 0.04
      pos = (-0.4, 0.1)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = norm
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    SliderComponent smartband_price
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = "Bardzo mało istotne", "Bardzo istotne"
      letterHeight = 0.04
      pos = (-0.4, -0.3)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = norm
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    SliderComponent tablet_price
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = "Bardzo mało istotne", "Bardzo istotne"
      letterHeight = 0.04
      pos = (-0.4, -0.7)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = norm
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    ImageComponent laptop3
      image = png/laptop_m.png
      pos = (0.4, 0.5)
      size = (0.225, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent smartwatch3
      image = png/smartwatch_m.png
      pos = (0.4, 0.1)
      size = (0.225, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent smartband3
      image = png/smartband_m.png
      pos = (0.4, -0.3)
      size = (0.225, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent tablet3
      image = png/tablet_m.png
      pos = (0.4, -0.7)
      size = (0.225, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_6
      Code Type = Auto->JS
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      Each Frame:
        if laptop_price.rating and smartwatch_price.rating and smartband_price.rating and tablet_price.rating:
            continueRoutine=False
  Routine awareness_facts_check
    TextboxComponent awareness_facts
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, .4)
      size = (1.5, .2)
      startVal [time (s)] = 0.0
      text = W przypadku swojej oceny każdego produktu wskaż, na ile istotne były dla Ciebie fakty na temat danego produktu?
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    SliderComponent laptop_facts
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = "Bardzo mało istotne", "Bardzo istotne"
      letterHeight = 0.04
      pos = (-0.4, 0.5)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = norm
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    SliderComponent smartwatch_facts
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = "Bardzo mało istotne", "Bardzo istotne"
      letterHeight = 0.04
      pos = (-0.4, 0.1)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = norm
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    SliderComponent smartband_facts
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = "Bardzo mało istotne", "Bardzo istotne"
      letterHeight = 0.04
      pos = (-0.4, -0.3)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = norm
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    SliderComponent tablet_facts
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = "Bardzo mało istotne", "Bardzo istotne"
      letterHeight = 0.04
      pos = (-0.4, -0.7)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = norm
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    ImageComponent laptop2
      image = png/laptop_m.png
      pos = (0.4, 0.5)
      size = (0.225, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent smartwatch2
      image = png/smartwatch_m.png
      pos = (0.4, 0.1)
      size = (0.225, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent tablet2
      image = png/tablet_m.png
      pos = (0.4, -0.7)
      size = (0.225, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent smartband2
      image = png/smartband_m.png
      pos = (0.4, -0.3)
      size = (0.225, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_5
      Code Type = Auto->JS
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      Each Frame:
        if laptop_facts.rating and smartwatch_facts.rating and smartband_facts.rating and tablet_facts.rating:
            continueRoutine=False
  Routine expertise_check
    SliderComponent slider_exp
      fillColor = Black
      forceEndRoutine = True
      granularity = 1
      labels = "Wcale", "W pełni"
      letterHeight = 0.05
      pos = (0, -0.6)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6 ,7)
      units = norm
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        ## Depending on the sex of the participant it
        ## either loads the question for females or
        ## males.
        with open('materials/expertise.txt', encoding="utf-8") as file:
            expertise_q = file.readlines()
        if expInfo['płeć'] == 'kobieta':
            exp_text = expertise_q[0].replace(';','\n\n')
        else:
            exp_text = expertise_q[1].replace(';','\n\n')
      Each Frame:
        if slider_exp.rating:
            continueRoutine=False
    TextboxComponent expertise
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $exp_text
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Flow
  Routine instruction
  Routine trust_manipulation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = materials/conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'product': 'laptop', 'facts': 'Posiada ekran o przekątnej 15.6" i wysokiej rozdzielczości. Matowa powłoka matrycy pozwala na korzystanie z komputera nawet przy dużym słońcu.\n\nWyposażony w dwurdzeniowy procesor.\n\nWbudowana pamięć RAM o pojemności 8 GB pozwala na uruchomienie kilku aplikacji jednocześnie oraz granie w wymagające sprzętowo gry komputerowe.\n\nDysk SSD o pojemności 256 GB.\n\nślad węglowy: 423 kg', 'opinions': 'Bardzo dobre wykonanie, minimalistyczny wygląd, podoba mi się, że nie ma zbędnych naklejek. Praca na nim przebiega płynnie, ekran rzeczywiście ładnie odwzorowuje kolo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,
      {'product': 'tablet', 'facts': 'Posiada czytelny wyświetlacz o przekątnej 10,5 cala.\n\nJest zasilany akumulatorem o pojemności 7040 mAh i ma opcję szybkiego ładowania.\n\nPosiada dwa aparaty. Przedni pozwala robić selfie i nagrywać filmy z ręki, a tylny umożliwia nagrywanie filmów w Full HD.\n\nWbudowane 4 GB pamięci RAM pozwala obsługiwać nawet kilka aplikacji naraz.\n\nślad węglowy: 170 kg', 'opinions': 'jestem zadowolona , jakość adekwatna do ceny , a nawet lepsza.\n\nŚwietny wygląd, komfort użytkowania i osiągi jak na ten budżet. Polecam!\n\nSolidny, dobrze wykonany. Działa sprawnie, jest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,
      {'product': 'smartwatch', 'facts': 'Czytelny wyświetlacz 1.4”.\n\nBezprzewodowa łączność ze smartphonem (kompatybilny zarówno z Androidem jak i iOSem).\n\nAsystent zdrowotny z funkcjami pomiaru ciśnienia i EKG, analiza składu ciała, zaawansowana analiza snu, czujniki aktywności fizycznej.\n\nBateria pracuje do 40 godzin i naładujesz ją od 0% do 100% w godzinę i 48 minut.\n\nPosiada 16 GB pamięci wewnętrznej.\n\nślad węglowy: 43 kg', 'opinions': 'Super Smartwatch. Pomógł mi zadbać o zdrowie, fajnie się z nim ćwiczy. Bateria mi trzymała raczej nieźle, a jestem na to wyczulona. Ogólnie Polecam. J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,
      {'product': 'smartband', 'facts': 'Bezprzewodowa łączność ze smartphonem (kompatybilny zarówno z Androidem jak i iOSem).\n\nAutomatycznie wykrywa 3 tryby: bieżnia, bieganie lub spacery na świeżym powietrzu.\n\nPrzy standardowym użytkowaniu działa do 14 dni na jednym naładowaniu baterii - w trybie oszczędzania baterii maksymalnie do 20 dni.\n\nślad węglowy: 36 kg', 'opinions': 'Bardzo dobry zakup. Wygląda jak smartwatch, estetycznie wykonany , posiada wielorakie funkcje, których szukałem. No i możliwości sparowania są na plus!\n\nUdany zakup. Spełnił wszystkie moje oczekiwania. Nawet na chudsze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
    Routine products_display
    Routine ratings
  LoopTerminator trials
  Routine awareness_opinions_check
  Routine awareness_facts_check
  Routine expertise_check
  Routine awareness_price_check
  Routine carbon_footprint
  Routine environmentalism_check
  Routine end
